CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:122_20181112_(?P<TUBmut>.*)(?P<imageno>[0-9]{4})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:AcMT
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    Set intensity range from:Image metadata
    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:TUBmut

IdentifyPrimaryObjects:[module_num:5|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enabled:False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
    Select the input image:gB
    Name the primary objects to be identified:gB_AC
    Typical diameter of objects, in pixel units (Min,Max):50,600
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.1,1.0
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
MeasureImageIntensity:[module_num:6|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
    Select the image to measure:AcMT
    Measure the intensity only from areas enclosed by objects?:No
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
MeasureObjectSizeShape:[module_num:7|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enabled:False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
    Select objects to measure:gB_AC
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:8|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enabled:False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
    Hidden:2
    Select an image to measure:AcMT
    Select an image to measure:gB
    Select objects to measure:gB_AC

ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|G:\\122\\122_20181112_redux20190627
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:122_20181112_redux20190627_v1A_
    Overwrite existing files without warning?:No
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