CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Use 2 workers']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
    Filter images?:Custom
    Select the rule criteria:and (file does contain "_w102") (file doesnot contain "_thumb_")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<experiment>[0-9]{1,3})_(?P<date>[0-9]{1,11})_(?P<biorep>.*)_(?P<inhibitor>.*)_(?P<imageNo>[0-9]{1,3})_.*
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "_w102")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:GFPplaque
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    Set intensity range from:Image bit-depth
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:biorep
    Metadata category:inhibitor

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:GFPplaque
    Name the primary objects to be identified:GFPcells
    Typical diameter of objects, in pixel units (Min,Max):20,5000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Erase
    Maximum number of objects:5000
    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:0.1
    Lower and upper bounds on threshold:0.05,1.0
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    Two-class or three-class thresholding?:Two classes
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
SplitOrMergeObjects:[module_num:6|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
    Select the input objects:GFPcells
    Name the new objects:PLAQUES
    Operation:Merge
    Maximum distance within which to merge objects:200
    Merge using a grayscale image?:No
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    Merging method:Distance
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
MeasureObjectSizeShape:[module_num:7|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
    Select objects to measure:PLAQUES
    Calculate the Zernike features?:No

FilterObjects:[module_num:8|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enabled:False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
    Select the objects to filter:PLAQUES
    Name the output objects:FilteredPLAQUES
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:25000
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:9|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
    Select objects to measure:PLAQUES
    Calculate the Zernike features?:No

OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:GFPplaque
    Name the output image:OUTLINES
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:PLAQUES

DisplayDataOnImage:[module_num:11|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
    Display object or image measurements?:Object
    Select the input objects:PLAQUES
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:OUTLINES
    Text color:red
    Name the output image that has the measurements displayed:Displaydataonimage_
    Font size (points):40
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:12|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:FilteredPLAQUES
    Measurement to display:AreaShape_Area
    Select the image on which to display the measurements:Displaydataonimage_
    Text color:#59EC13
    Name the output image that has the measurements displayed:Displaydataonimage2_
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):50
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:13|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enabled:False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
    Display object or image measurements?:Image
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    Measurement to display:FileName_GFPplaque
    Select the image on which to display the measurements:Displaydataonimage_
    Text color:#0DCAF2
    Name the output image that has the measurements displayed:Displaydataonimage3_
    Font size (points):20
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):50
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:Displaydataonimage_
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFPplaque
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines
    Saved file format:jpeg
    Output file location:Elsewhere...|G:\\133_actin inhibitors\\133_20190617_actin inhibitor plaques\\_pipeline\\repABC v1 outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|G:\\133_actin inhibitors\\133_20190617_actin inhibitor plaques\\_pipeline
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:133_20190617_repABC_v1_
    Overwrite existing files without warning?:No
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