CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"imageno": "text", "FileLocation": "text", "Series": "text", "Frame": "text", "siRNA": "text", "objectno": "text", "channel": "integer"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:114_20190204_repC_(?P<siRNA>.*)_(?P<imageno>[0-9]{1,5})_(?P<objectno>[0-9]{1,4})_C(?P<channel>[0-9]{1})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does channel "2")
    Name to assign these images:gDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does channel "1")
    Name to assign these images:gB
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does channel "3")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:siRNA

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:NUC_DAPI
    Typical diameter of objects, in pixel units (Min,Max):150,600
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.00
    Lower and upper bounds on threshold:0.0,1.0
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
MaskImage:[module_num:6|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
    Select the input image:gDNA
    Name the output image:gDNA_NUCmask
    Use objects or an image as a mask?:Objects
    Select object for mask:NUC_DAPI
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:gDNA_NUCmask
    Name the primary objects to be identified:RCs
    Typical diameter of objects, in pixel units (Min,Max):10,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
SplitOrMergeObjects:[module_num:8|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
    Select the input objects:RCs
    Name the new objects:RCs_merged
    Operation:Merge
    Maximum distance within which to merge objects:0
    Merge using a grayscale image?:No
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    Merging method:Distance
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
RelateObjects:[module_num:9|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
    Parent objects:NUC_DAPI
    Child objects:RCs_merged
    Name the output object:RelateObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
ExpandOrShrinkObjects:[module_num:10|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
    Select the input objects:NUC_DAPI
    Name the output objects:NUC_expand
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:150
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
IdentifyTertiaryObjects:[module_num:11|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
    Select the larger identified objects:NUC_expand
    Select the smaller identified objects:NUC_DAPI
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:No

MeasureObjectSizeShape:[module_num:12|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
    Select objects to measure:NUC_DAPI
    Select objects to measure:RCs_merged
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:13|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
    Hidden:2
    Select an image to measure:gB
    Select an image to measure:gDNA
    Select objects to measure:NUC_DAPI
    Select objects to measure:Cytoplasm
    Select objects to measure:RCs_merged

OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:Yes
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    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:NUC_DAPI
    Select outline color:Green
    Select objects to display:RCs_merged
    Select outline color:Blue
    Select objects to display:RCs

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines
    Saved file format:jpeg
    Output file location:Elsewhere...|B:\\114\\114_20180920_KD\\114_20190204_KD_repC\\_CP\\v3 CNN to CP\\outlines\\v3c_ALL
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|B:\\114\\114_20180920_KD\\114_20190204_KD_repC\\_CP\\v3 CNN to CP
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:114_20190204_KD_repC_v3d_ALL_manuallysorted_
    Overwrite existing files without warning?:No
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